PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SYM_CABI_RSfMRI_1
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    ImageComponent rs_cross
      image = /Users/sbasodi1/GSU Dropbox Dropbox/Sunitha Basodi/9. CABI Grant Sahajayoga/8.DataCollection/RS_fMRI_Psychopi_Task/images/fixation_cross.png
      size = (1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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Flow
  Routine trial
