PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 6_SlowBreathingSYMTask
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    MovieComponent breathing_video
      backend = ffpyplayer
      forceEndRoutine = False
      movie = /Users/sbasodi1/GSU Dropbox Dropbox/Sunitha Basodi/snt_mac/workplace/sym_cabi/SYM_CABI_MeditationStudy/PsychopiScanSequences/videos/SYM_BreathingVideoEdited.mp4
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 242
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    ImageComponent image
      image = /Users/sbasodi1/GSU Dropbox Dropbox/Sunitha Basodi/snt_mac/workplace/sym_cabi/SYM_CABI_MeditationStudy/PsychopiScanSequences/images/SYM_SlowBreathingTask.png
      size = (1.6, 1)
      startVal [time (s)] = 243
      stopVal [duration (s)] = 240
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Flow
  Routine trial
